OpenViBE-Scenario
Comment
  fake slightly names to have map
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #2
  New channel names = SmileL;SmileR;O1;T7;FP1;FP2;T8;O2
-> Channel Rename
  New channel names = Fp1;Fp2;O1;T7;F7;F8;T8;O2
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
#2 -> Temporal filter => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
Data=#9 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Electrode localisation file reader => #11
  Filename = ${Path_Data}/electrode_sets/electrode_set_standard_cartesian.txt
Signal=#8, Channel localisation=#11 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center
Signal=#8, Channel localization=#11 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0.000000
