OpenViBE-Scenario
Comment
  0: nothing
  1: left
  2: right
  3: both

mono_gui
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 250
  Generated epoch sample count = 4
  min value = 0
  max value = 4
  window title = mono_gui
-> Simple DSP
  Equation = floor(x)
-> Signal average
-> 0-3 range => #3
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 3
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#3 -> LSL Export (Gipsa)
  Stream name = smile
  Stream type = tobe
#3 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
