OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "emg band" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#2 -> Signal display "emg"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Simple DSP "power"
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.125
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Signal average => #7
-> 0xc67a01dc Simple DSP "threshold" => #8
  Equation = x>500
Data=#8 -> Signal display "smile"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#7 -> Signal display "power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
