OpenViBE-Scenario
Comment
  0: nothing
  1: left
  2: right
  3: both

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:2"
  Channel List = 1:2
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = SmileL;SmileR
-> Temporal filter "emg band" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#3 -> Signal display "emg"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Simple DSP "power"
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.125
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Signal average => #8
-> Simple DSP "threshold" => #9
  Equation = x>500
-> Channel Selector "SmileL" => #10
  Channel List = SmileL
  Action = Select
  Channel Matching Method = Smart
#9 -> Channel Selector "SmileR" => #11
  Channel List = SmileR
  Action = Select
  Channel Matching Method = Smart
Input - A=#10, Input - B=#11 -> Simple DSP => #12
  Equation = a*1+b*2
-> Channel Rename => #13
  New channel names = index
Input 1=#9, Input 2=#13 -> Signal Merger => #14
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#14 -> Signal display "smile"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#13 -> LSL Export (Gipsa)
  Stream name = smile
  Stream type = tobe
Data=#12 -> Signal display "index"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#8 -> Signal display "power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 0
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
