OpenViBE-Scenario
Comment
  0: not happy
  1: very happy

Time signal
  Sampling frequency = 250
  Generated epoch sample count = 4

0xc67a01dc mono_gui
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 250
  Generated epoch sample count = 4
  min value = 0
  max value = 1
  window title = mono_gui
-> 0-1 range
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 1
-> Signal average => #3
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#3 -> LSL Export (Gipsa)
  Stream name = valence
  Stream type = tobe
#3 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
